PsychoPy2experiment version="3.0.0b9"
Settings
  Experiment info = {'participant': '', 'session': '001', 'group': '', 'level': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = use prefs
  Window size (pixels) = [1440, 900]
  expName = Dissertation
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Routines
  Routine scoreKeeperPractice
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 12
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    TextComponent spacetoContinue
      color = black
      font = courier
      letterHeight = 0.04
      pos = (0, -0.7)
      startVal [time (s)] = 12
      text = Pulsa 'espacio' para continuar.
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    TextComponent textAccuracyCheck
      color = black
      font = courier
      letterHeight = 0.075
      startVal [time (s)] = 0.0
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      text:
        ¡Cuidado!

        Es importante responder rápido, pero también es importante que respondas correctamente.

        Descansa un momento y cuando continúes, tómate tu tiempo.
    CodeComponent code_3
      Code Type = Py
      Begin Routine:
        if MixedPracticeTrial.thisN == 0:
            wrongFlankerScore = 0
            wrongQuestScore = 0
            flanker_number_correct = 0
            compQ_number_correct = 0

        if flankerkeyresponse.corr:
            flanker_number_correct = flanker_number_correct + 1
            wrongFlankerScore = 0
        else:
            wrongFlankerScore = wrongFlankerScore + 1

        if CompQkeyresponse.corr:
            compQ_number_correct = compQ_number_correct + 1
            wrongQuestScore = 0
        else:
            wrongQuestScore = wrongQuestScore + 1

        if wrongFlankerScore == 3 or wrongQuestScore == 3:
            continueRoutine = True
        else:
            continueRoutine = False
      End Routine:
        ''' if this is the final repetition, check the proportion correct.
            (am avoiding hard coding the value '12' for flexibility):'''
        if MixedPracticeTrial.thisN + 1 == MixedPracticeTrial.nTotal:
            if flanker_number_correct/(MixedPracticeTrial.nTotal) >= 0.8 and compQ_number_correct/(MixedPracticeTrial.nTotal) >= 0.8:
                MixedPractice.finished = True
  Routine instructionsMixed
    TextComponent instructionsMixedText
      color = black
      font = courier
      letterHeight = 0.075
      startVal [time (s)] = 0.0
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      text:
        Recuerda: tanto la precisión como la rapidez son importantes.

        Recuerda:
        'f' = 'S' o "Verdadera"
        'j' = 'H' o "Falsa"
        'espacio' = continuar (o revelar la siguiente palabra).

        Pulsa 'espacio' cuando estés listo para continuar.
    KeyboardComponent keyResponseInstructionsMixed
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 2.0
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    CodeComponent code_6
      Code Type = Py
  Routine Introduction
    TextComponent introText
      color = black
      font = courier
      letterHeight = 0.075
      startVal [time (s)] = 0.0
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      text:
        Thank you for participating in this study. We will be looking at your processing of Spanish.

        Before we begin, it's important to know that both accuracy and speed are important throughout this study.

        In other words, in order to finish as quickly as possible, you'll have to apply yourself and concentrate.

        When you're ready, press 'space' to continue.
    KeyboardComponent keyResponseIntroText
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 2.0
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  Routine rest
    TextComponent restBetweenBlocks
      color = black
      font = courier
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Descansa!

        Ya has pasado el punto intermedio.

        Tómate un momento para descansar y continúes cuando estés list@.
    KeyboardComponent rest_keyresponse
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 20.0
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    CodeComponent code
      Code Type = Py
      Begin Routine:
        if blocks.thisN + 1 == blocks.nTotal:
            continueRoutine = False
  Routine CompQ
    TextComponent questTS
      color = black
      font = courier
      letterHeight = 0.075
      startVal [time (s)] = 0.0
      text [set every repeat] = $compQ
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    TextComponent respLeftTS
      color = black
      font = courier
      letterHeight = 0.075
      pos = (-0.5, -0.5)
      startVal [time (s)] = 0.0
      text [set every repeat] = $compRespL
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    TextComponent respRightTS
      color = black
      font = courier
      letterHeight = 0.075
      pos = (0.5, -0.5)
      startVal [time (s)] = 0.0
      text [set every repeat] = $compRespR
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    KeyboardComponent CompQkeyresponse
      allowedKeys = 'f', 'j'
      correctAns = $compRespCorr
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    CodeComponent code_4
      Code Type = Py
      Begin Routine:
        if criticalSentenceCode > 299:
            continueRoutine = False
  Routine Flanker_Instructions
    TextComponent FlankerInstructions
      color = black
      font = courier
      letterHeight = 0.075
      startVal [time (s)] = 0.0
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      text:
        First, let's practice how to respond to the letter stimuli.

        You'll respond to images with either one or seven letters ('H' or 'S'). Your only responsibility is to respond to the MIDDLE letter.

        If the letter in the middle is the letter 'S', press 'f'.
        If the letter in the middle is the letter 'H', press 'j'.

        Press 'space' to continue.
    KeyboardComponent FlankerInstructions_keyresponse
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 2.0
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  Routine setupExp
    CodeComponent SetUpExp_code
      Code Type = Py
      Begin Experiment:
        group = expInfo["group"]

        # A dictionary, where the key is a block name,
        # and the value is the name of the spreadsheet
        # containing the trials for that block
        condFiles = {
            "A1": "A1.xlsx",
            "B1": "B1.xlsx",
            "A2": "A2.xlsx",
            "B2": "B2.xlsx",
            }

        # Key is group (a string "1", "2", etc.)
        # Value is a list containing the blocks in the desired
        #   order for the group.
        blockSequences = {
            "1": ["A1", "B1"], # Group 1 will see A1 first, then B1.
            "2": ["B1", "A1"],
            "3": ["A2", "B2"],
            "4": ["B2", "A2"],
            }

        # Make sure "group" entered in the gui dialog is one that
        # we want
        assert group in blockSequences, "Invalid group entered"

        # Set the block sequence for this participant's group.
        blockSeq = blockSequences[group]
  Routine pickBlock
    CodeComponent pickBlock_code
      Code Type = Py
      Begin Routine:
        # If we're on the 0th repetition (in our case meaning the 1st block),
        # get the 0th item in blockSeq list we made earlier.
        block = blockSeq[blocks.thisRepN]

        # Get the conditions file for that block
        condFile = condFiles[block]
  Routine SPR_Instructions
    TextComponent SPRInstructions
      color = black
      font = courier
      letterHeight = 0.075
      startVal [time (s)] = 0.0
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      text:
        Great! You've figured out how to do the arrow task.

        Now let's try the sentence reading. Remember the words will be hidden by dashes. In order to unmask each word, you will only need to press the space bar. Try to read the sentence at as normal a pace as possible while still understanding the sentence.

        Following the sentence, you'll respond to a true or false question. To select your response, press 'f' (left option) or 'j' (right option).

        Press 'space' to continue.
    KeyboardComponent SPRInstructions_keyresponse
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 2.0
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  Routine midBlockBreak
    TextComponent midBlockBreakText
      color = black
      font = courier
      letterHeight = 0.075
      startVal [time (s)] = 0
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      text:
        Tómate un momento para descansar.
    KeyboardComponent key_resp_4
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 12
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    TextComponent pressSpace
      color = black
      font = courier
      letterHeight = 0.04
      pos = (0, -0.7)
      startVal [time (s)] = 12
      text = Pulsa 'espacio' para continuar.
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    CodeComponent code_2
      Code Type = Py
      Begin Routine:
        if trials.thisN == 37:
            continueRoutine = True
        else:
            continueRoutine = False
  Routine Introduction2
    TextComponent Intro2text
      color = black
      font = courier
      letterHeight = 0.075
      startVal [time (s)] = 0.0
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      text:
        Throughout the study, you'll see two types of 'stimuli':

        In the first type, you'll be presented with an sequence of letters in the center of the screen. Your job is to respond to the middle letter of the sequence (More directions will be presented later).

        In the second, you'll see a sentence covered by dashes ("-"). You'll uncover each word, one by one, to read the sentence. Then, you'll respond to a question about the sentence.

        Now, these stimuli will be explained in more detail. Press 'space' to continue.
    KeyboardComponent keyResponseIntro2Text
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 2.0
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  Routine PreStart
    TextComponent preStartText
      color = black
      font = courier
      letterHeight = 0.075
      startVal [time (s)] = 0.0
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      text:
        ¡Genial! ¡Ya lo tienes!

        Si todavía tienes preguntas, hazlas ahora.
        A partir de ahora, queremos evitar las pausas, así que si tienes que usar el baño, tomar de tu bebida, etc., por favor hazlo ya.

        Cuando estés list@ para iniciar el experimento, pulsa 'espacio'.
    KeyboardComponent keyResponsePreStart
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine SPR_Instructions2
    TextComponent SPRinstructions2
      color = black
      font = courier
      letterHeight = 0.075
      startVal [time (s)] = 0.0
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      text:
        Remember: both accuracy and timing are important.

        If you don't respond quickly enough or if you don't answer the question correctly, that answer will be considered incorrect.

        You'll have to repeat the practice if you don't get at least 80% correct.

        Press 'space' when you're ready to begin the practice.
    KeyboardComponent SPRinstructions2_keyresponse
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 2.0
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  Routine fixation
    TextComponent fixation_cross
      color = black
      font = courier
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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  Routine Goodbye
    TextComponent EndText
      color = black
      font = courier
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text:
        Gracias por completar el estudio.

        Antes de que te vayas, el investigador va a pedir que completes un cuestionario sobre tu experiencia lingüística.

        No dura más de 5 minutos.
  Routine Combined_Instructions
    TextComponent Instructions_Combined
      color = black
      font = Courier
      letterHeight = 0.075
      startVal [time (s)] = 0.0
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      text:
        Great! Now, for the rest of the experiment, you'll be interacting with both types of stimuli at the same time.

        Now that you've gotten the hang of how the tasks work, the rest of the experiment will be in Spanish.

        However, if you have any questions during the study, feel free to raise your hand and ask the researcher. There are 3 breaks throughout the study. Please try to work through until the next break instead of stopping in the middle of the experiment.

        Press 'space' to continue.
    KeyboardComponent combinedInstructions_keyresponse
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 2.0
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  Routine flanker
    ImageComponent imageStim
      image [set every repeat] = $image
      size = (1, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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    KeyboardComponent flankerkeyresponse
      allowedKeys = 'f', 'j'
      correctAns = $imageCorrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      storeCorrect = True
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  Routine Flanker_Instructions2
    TextComponent flankerInstructions2
      color = black
      font = courier
      letterHeight = 0.075
      startVal [time (s)] = 0.0
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      text:
        Remember: both accuracy and timing are important.
        If you don't respond quickly enough or if you respond with the wrong response key, that answer will be considered incorrect.

        You'll have to repeat the practice if you don't get at least 80% correct.

        Press 'space' when you're ready to begin the practice.
    KeyboardComponent FlankerInstructions2_keyresponse
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 2.0
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  Routine trial2
  Routine PracticeFlanker
    ImageComponent practiceFlanker
      image [set every repeat] = $practiceimage
      size = (1, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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    KeyboardComponent PracticeFlankerResponse
      allowedKeys = 'f', 'j'
      correctAns = $PracticeimageCorrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      storeCorrect = True
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    CodeComponent RepeatIfNeeded_flanker
      Code Type = Py
      Begin Routine:
        ''' reset the counter at the beginning of each practice loop:'''
        if practiceFlankerLoop.thisN == 0:
            number_correct = 0
      End Routine:
        ''' update the number correct:'''
        if PracticeFlankerResponse.corr:
            number_correct = number_correct + 1

        ''' if this is the final repetition, check the proportion correct.
            (am avoiding hard coding the value '12' for flexibility):'''
        if practiceFlankerLoop.thisN +1 == practiceFlankerLoop.nTotal:
            if number_correct/(practiceFlankerLoop.nTotal) >= 0.8:
                ''' terminate the outer loop so no more practice happens:'''
                RepeatFlankerIfNeeded.finished = True
  Routine trial
    TextComponent sentences
      color = black
      font = courier
      letterHeight = 0.075
      startVal [time (s)] = 0.0
      text = This should not appear
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    CodeComponent sentenceMasking_code
      Code Type = Py
      Begin Experiment:
        # now define a function which we can use here and later on to replace letters with '-':

        def replaceWithdash(textList, currentWordNumber):

            dashSentence = ''
            for index, word in enumerate(textList): # cycle through the words and their index numbers
                if index != currentWordNumber:
                    dashSentence = dashSentence + ' ' + '-' * len(word)# add a string of dash characters
                else:
                    dashSentence = dashSentence + ' ' + word #for current word, but space was appearing between period and final word, so put space before each word rather than after
            return dashSentence +'.' # yields the manipulated sentence

        # Creating our own clock to time how reaction times
        # based on screen flips (i.e. when the word was actually
        # shown
        wordClock = core.Clock()
      Begin Routine:
        if criticalSentenceCode > 299:
            continueRoutine = False

        # remove any keypresses remaining in the buffer from
        # before  this routine started:
        event.clearEvents()
        sentenceList = sentence.split()
        # this breaks your sentence's single string of characters into a list of individual
        # words, e.g. 'The quick brown fox.' becomes ['The', 'quick', 'brown', 'fox.']

        # keep track of which word we are up to:
        wordNumber = -1 # -1 as we haven't started yet

        # now at the very beginning of the trial, we need to run this function for the
        # first time. As the current word number is -1, it should make all words '-'.
        # Use the actual name of your Builder text component here:

        sentences.text = replaceWithdash(sentenceList, wordNumber)

        # DAN: reset our wordClock (it gets set to 0)
        wordClock.reset()

        # In the Builder interface, specify a "constant" value for the text content, e.g.
        # 'test', so it doesn't conflict with our code.
      Each Frame:
        keypresses = event.getKeys() # returns a list of keypresses

        if len(keypresses) > 0: # at least one key was pushed

            if 'space' in keypresses:

                thisResponseTime = t # the current time in the trial

                # DAN: Also saving the time based on our wordClock,
                # which is reset when the next word is actually shown
                rtFromFlip = wordClock.getTime()
                # Tell psychopy to call the wordClock's reset() method
                # the next time the window flips:
                win.callOnFlip(wordClock.reset)

                wordNumber = wordNumber + 1
                if wordNumber < len(sentenceList):

                    if wordNumber == 0: # need to initialise a variable:
                        timeOfLastResponse = 0

                    # save the inter response interval for this keypress,
                    # in variables called IRI_0, IRI_1, etc:
                    thisExp.addData('IRI_' + str(wordNumber), thisResponseTime - timeOfLastResponse)
                    timeOfLastResponse = thisResponseTime

                    # Saving our flip-based rt
                    thisExp.addData("IRI_FL_" + str(wordNumber), rtFromFlip)

                    # Also, since you asked, we'll save the time
                    # since the trial started. (i.e. if the 'space' is hit
                    # at second 1 and 2:
                    #   IRI_1 = 1
                    #   IRI_2 = 1
                    #   space_1 = 1
                    #   space_2 = 2
                    thisExp.addData("space_" + str(wordNumber), thisResponseTime)

                    # update the text by masking all but the current word
                    sentences.text = replaceWithdash(sentenceList, wordNumber)
                else:
                    continueRoutine = False # time to go on to the next trial

            elif 'escape' in keypresses:

                core.quit() # I think you'll need to handle quitting manually now.
  Routine PracticeSentences
    TextComponent practiceSentences
      color = black
      font = courier
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = This should not appear
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    CodeComponent SPRmasking_code_practice
      Code Type = Py
      Begin Experiment:
        # now define a function which we can use here and later on to replace letters with '-':

        def replaceWithdash(textList, currentWordNumber):

            dashSentence = ''
            for index, word in enumerate(textList): # cycle through the words and their index numbers
                if index != currentWordNumber:
                    dashSentence = dashSentence + ' ' + '-' * len(word)# add a string of dash characters
                else:
                    dashSentence = dashSentence + ' ' + word #for current word, but space was appearing between period and final word, so put space before each word rather than after
            return dashSentence +'.' # yields the manipulated sentence

        # Creating our own clock to time how reaction times
        # based on screen flips (i.e. when the word was actually
        # shown
        wordClock = core.Clock()
      Begin Routine:
        # remove any keypresses remaining in the buffer from
        # before  this routine started:
        event.clearEvents()
        practiceSentenceList = practiceSentence.split()
        # this breaks your sentence's single string of characters into a list of individual
        # words, e.g. 'The quick brown fox.' becomes ['The', 'quick', 'brown', 'fox.']

        # keep track of which word we are up to:
        wordNumber = -1 # -1 as we haven't started yet

        # now at the very beginning of the trial, we need to run this function for the
        # first time. As the current word number is -1, it should make all words '-'.
        # Use the actual name of your Builder text component here:

        practiceSentences.text = replaceWithdash(practiceSentenceList, wordNumber)

        # DAN: reset our wordClock (it gets set to 0)
        wordClock.reset()

        # In the Builder interface, specify a "constant" value for the text content, e.g.
        # 'test', so it doesn't conflict with our code.
      Each Frame:
        keypresses = event.getKeys() # returns a list of keypresses

        if len(keypresses) > 0: # at least one key was pushed

            if 'space' in keypresses:

                thisResponseTime = t # the current time in the trial

                # DAN: Also saving the time based on our wordClock,
                # which is reset when the next word is actually shown
                rtFromFlip = wordClock.getTime()
                # Tell psychopy to call the wordClock's reset() method
                # the next time the window flips:
                win.callOnFlip(wordClock.reset)

                wordNumber = wordNumber + 1
                if wordNumber < len(practiceSentenceList):

                    if wordNumber == 0: # need to initialise a variable:
                        timeOfLastResponse = 0

                    # save the inter response interval for this keypress,
                    # in variables called IRI_0, IRI_1, etc:
                    thisExp.addData('IRI_' + str(wordNumber), thisResponseTime - timeOfLastResponse)
                    timeOfLastResponse = thisResponseTime

                    # Saving our flip-based rt
                    thisExp.addData("IRI_FL_" + str(wordNumber), rtFromFlip)

                    # Also, since you asked, we'll save the time
                    # since the trial started. (i.e. if the 'space' is hit
                    # at second 1 and 2:
                    #   IRI_1 = 1
                    #   IRI_2 = 1
                    #   space_1 = 1
                    #   space_2 = 2
                    thisExp.addData("space_" + str(wordNumber), thisResponseTime)

                    # update the text by masking all but the current word
                    practiceSentences.text = replaceWithdash(practiceSentenceList, wordNumber)
                else:
                    continueRoutine = False # time to go on to the next trial

            elif 'escape' in keypresses:

                core.quit() # I think you'll need to handle quitting manually now.
  Routine practiceSentenceCompQ
    TextComponent practiceCompQ
      color = black
      font = courier
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every repeat] = $practiceSentenceCompQ
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    TextComponent practiceCompRespLeft
      color = black
      font = courier
      letterHeight = 0.1
      pos = (-.5, -.5)
      startVal [time (s)] = 0.0
      text [set every repeat] = $compRespL
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    TextComponent practiceCompRespRight
      color = black
      font = courier
      letterHeight = 0.1
      pos = (.5, -.5)
      startVal [time (s)] = 0.0
      text [set every repeat] = $compRespR
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    KeyboardComponent key_resp_practiceCompQ
      allowedKeys = 'f', 'j'
      correctAns = $compRespCorr
      forceEndRoutine = True
      startVal [time (s)] = .2
      storeCorrect = True
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    CodeComponent RepeatIfNeeded_SPR
      Code Type = Py
      Begin Routine:
        ''' reset the counter at the beginning of each practice loop:'''
        if practiceSentenceLoop.thisN == 0:
            number_correct = 0
      End Routine:
        ''' update the number correct:'''
        if key_resp_practiceCompQ.corr:
            number_correct = number_correct + 1

        ''' if this is the final repetition, check the proportion correct.
            (am avoiding hard coding the value '12' for flexibility):'''
        if practiceSentenceLoop.thisN + 1 == practiceSentenceLoop.nTotal:
            if number_correct/(practiceSentenceLoop.nTotal) >= 0.8:
                ''' terminate the outer loop so no more practice happens:'''
                RepeatPracticeSentencesIfNeeded.finished = True
  Routine scoreKeeper
    CodeComponent scoreCode
      Code Type = Py
      Begin Routine:
        ''' reset the counter at the beginning of each loop:'''
        if trials.thisN == 0:
            wrongscore = 0
            wrongscoreQuestions = 0

        if flankerkeyresponse.corr:
            wrongscore = 0
        else:
            wrongscore = wrongscore + 1

        if CompQkeyresponse.corr:
            wrongscoreQuestions = 0
        else:
            wrongscoreQuestions = wrongscoreQuestions + 1

        if wrongscore == 3 or wrongscoreQuestions == 5:
            continueRoutine = True
            wrongscore = 0
            wrongscoreQuestions = 0
        else:
            continueRoutine = False
    TextComponent RestText
      color = black
      font = courier
      letterHeight = 0.075
      startVal [time (s)] = 0.0
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      text:
        ¡Cuidado!

        Es importante responder rápido, pero también es importante que respondas correctamente.

        Descansa un momento y cuando continúes, tómate tu tiempo.
    TextComponent PressSpaceToContinue
      color = black
      font = courier
      letterHeight = 0.04
      pos = (0, -0.7)
      startVal [time (s)] = 10.0
      text = Press 'space' to continue.
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    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 10.0
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  Routine PracticeSentencesInstructions
    TextComponent text
      color = black
      font = courier
      letterHeight = 0.075
      startVal [time (s)] = 0.0
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      text:
        Some of the sentences and questions are out of context or don't sound completely natural. That's okay! Read the sentence to the best of your ability and do what you can to respond to the question.

        The questions are in the form of "True/False".

        To respond "Verdadero" (True), press 'f'.
        To respond "Falso" (False), press 'j'.

        You don't have to memorize which side, just 'f' and 'j'. The words will always be there to guide you.

        To continue, press 'space'.
    KeyboardComponent key_resp_5
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 2.0
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  Routine fixation2
    TextComponent fixation2text
      color = black
      font = courier
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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    CodeComponent code_5
      Code Type = Py
      Begin Routine:
        if criticalSentenceCode > 299:
            continueRoutine = False
Flow
  Routine Introduction
  Routine Introduction2
  Routine Flanker_Instructions
  LoopInitiator RepeatFlankerIfNeeded loopType="TrialHandler"
    loopType = random
    nReps = 999
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    Routine Flanker_Instructions2
    LoopInitiator practiceFlankerLoop loopType="TrialHandler"
      conditionsFile = Practice.xlsx
      loopType = random
      nReps = 6
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      conditions:
        [OrderedDict([('practiceimage', 'congruent_left'), ('PracticeimageCorrAns', 'f'), ('congruent', 1), ('practiceSentence', 'Este es un ejemplo de las frases que verás a lo largo del experimento'), ('practiceSentenceCompQ', 'Viste un ejemplo de una oración estimulo.'), ('compRespL', 'Verdadero'), ('compRespR', 'Falso'), ('compRespCorr', 'f'), ('block', 'practice')]),
        OrderedDict([('practiceimage', 'congruent_right'), ('PracticeimageCorrAns', 'j'), ('congruent', 1), ('practiceSentence', 'A veces las oraciones serán muy largas'), ('practiceSentenceCompQ', 'Algunas frases son largas.'), ('compRespL', 'Verdadero'), ('compRespR', 'Falso'), ('compRespCorr', 'f'), ('block', 'practice')]),
        OrderedDict([('practiceimage', 'incongruent_left'), ('PracticeimageCorrAns', 'f'), ('congruent', 0), ('practiceSentence', 'A veces serán más cortas'), ('practiceSentenceCompQ', 'Todas las frases son iguales.'), ('compRespL', 'Verdadero'), ('compRespR', 'Falso'), ('compRespCorr', 'j'), ('block', 'practice')]),
        OrderedDict([('practiceimage', 'incongruent_right'), ('PracticeimageCorrAns', 'j'), ('congruent', 0), ('practiceSentence', 'Tu tarea es leer la frase de la manera más natural posible'), ('practiceSentenceCompQ', 'No tienes que prestarle atención a la oración.'), ('compRespL', 'Verdadero'), ('compRespR', 'Falso'), ('compRespCorr', 'j'), ('block', 'practice')])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
      Routine fixation
      Routine PracticeFlanker
    LoopTerminator practiceFlankerLoop
  LoopTerminator RepeatFlankerIfNeeded
  Routine SPR_Instructions
  Routine PracticeSentencesInstructions
  LoopInitiator RepeatPracticeSentencesIfNeeded loopType="TrialHandler"
    loopType = random
    nReps = 999
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    Routine SPR_Instructions2
    LoopInitiator practiceSentenceLoop loopType="TrialHandler"
      conditionsFile = Practice.xlsx
      loopType = sequential
      nReps = 1
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      conditions:
        [OrderedDict([('practiceimage', 'congruent_left'), ('PracticeimageCorrAns', 'f'), ('congruent', 1), ('practiceSentence', 'Este es un ejemplo de las frases que verás a lo largo del experimento'), ('practiceSentenceCompQ', 'Viste un ejemplo de una oración estimulo.'), ('compRespL', 'Verdadero'), ('compRespR', 'Falso'), ('compRespCorr', 'f'), ('block', 'practice')]),
        OrderedDict([('practiceimage', 'congruent_right'), ('PracticeimageCorrAns', 'j'), ('congruent', 1), ('practiceSentence', 'A veces las oraciones serán muy largas'), ('practiceSentenceCompQ', 'Algunas frases son largas.'), ('compRespL', 'Verdadero'), ('compRespR', 'Falso'), ('compRespCorr', 'f'), ('block', 'practice')]),
        OrderedDict([('practiceimage', 'incongruent_left'), ('PracticeimageCorrAns', 'f'), ('congruent', 0), ('practiceSentence', 'A veces serán más cortas'), ('practiceSentenceCompQ', 'Todas las frases son iguales.'), ('compRespL', 'Verdadero'), ('compRespR', 'Falso'), ('compRespCorr', 'j'), ('block', 'practice')]),
        OrderedDict([('practiceimage', 'incongruent_right'), ('PracticeimageCorrAns', 'j'), ('congruent', 0), ('practiceSentence', 'Tu tarea es leer la frase de la manera más natural posible'), ('practiceSentenceCompQ', 'No tienes que prestarle atención a la oración.'), ('compRespL', 'Verdadero'), ('compRespR', 'Falso'), ('compRespCorr', 'j'), ('block', 'practice')])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
      Routine PracticeSentences
      Routine practiceSentenceCompQ
    LoopTerminator practiceSentenceLoop
  LoopTerminator RepeatPracticeSentencesIfNeeded
  Routine setupExp
  Routine Combined_Instructions
  LoopInitiator MixedPractice loopType="TrialHandler"
    loopType = random
    nReps = 999
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    Routine instructionsMixed
    LoopInitiator MixedPracticeTrial loopType="TrialHandler"
      conditionsFile = MixedPractice.xlsx
      loopType = random
      nReps = 1
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      conditions:
        [OrderedDict([('image', 'congruent_left'), ('sentence', 'El chico corrió en el parque ayer'), ('ambiguous', None), ('critical', None), ('congruent', None), ('Incongruent', None), ('Single', None), ('block', None), ('imageCorrAns', None), ('incongruentambiguous', None), ('criticalSentenceCode', None), ('compQ', 'El chico no hizo nada ayer.'), ('compRespL', 'Verdadero'), ('compRespR', 'Falso'), ('compRespCorr', 'j')]),
        OrderedDict([('image', 'incongruent_left'), ('sentence', 'Mi estación preferida es el verano'), ('ambiguous', None), ('critical', None), ('congruent', None), ('Incongruent', None), ('Single', None), ('block', None), ('imageCorrAns', None), ('incongruentambiguous', None), ('criticalSentenceCode', None), ('compQ', 'Me gusta el invierno más que las otras estaciones.'), ('compRespL', 'Verdadero'), ('compRespR', 'Falso'), ('compRespCorr', 'j')]),
        OrderedDict([('image', 'incongruent_right'), ('sentence', 'Estudio mucho durante la semana para poder divertirme durante el fin de semana'), ('ambiguous', None), ('critical', None), ('congruent', None), ('Incongruent', None), ('Single', None), ('block', None), ('imageCorrAns', None), ('incongruentambiguous', None), ('criticalSentenceCode', None), ('compQ', 'No voy a la biblioteca mucho los fines de semana.'), ('compRespL', 'Verdadero'), ('compRespR', 'Falso'), ('compRespCorr', 'f')]),
        OrderedDict([('image', 'congruent_right'), ('sentence', 'Me gusta vivir en la ciudad de Washington porque tiene mucha historia'), ('ambiguous', None), ('critical', None), ('congruent', None), ('Incongruent', None), ('Single', None), ('block', None), ('imageCorrAns', None), ('incongruentambiguous', None), ('criticalSentenceCode', None), ('compQ', 'Estoy contento viviendo en D.C.'), ('compRespL', 'Verdadero'), ('compRespR', 'Falso'), ('compRespCorr', 'f')])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
      Routine fixation
      Routine flanker
      Routine fixation2
      Routine trial
      Routine CompQ
      Routine scoreKeeperPractice
    LoopTerminator MixedPracticeTrial
  LoopTerminator MixedPractice
  Routine PreStart
  LoopInitiator blocks loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = $len(blockSeq)
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    Routine pickBlock
    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = $condFile
      loopType = random
      nReps = 1
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      Routine fixation
      Routine flanker
      Routine fixation2
      Routine trial
      Routine CompQ
      Routine scoreKeeper
      Routine midBlockBreak
    LoopTerminator trials
    Routine rest
  LoopTerminator blocks
  Routine Goodbye
