PsychoPy2experiment version="3.0.0b9"
Settings
  Experiment info = {'participant': '', 'session': '001', 'group': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = use prefs
  Window size (pixels) = [1440, 900]
  expName = VocabTraining
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Routines
  Routine Instructions2
    TextComponent instructions2
      color = black
      font = courier
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Remember: You need to have
        at least 85% correct in order
        to continue to the next part
        of the experiment.

        You'll need to respond using the keys: "a", "f", "j" and ";", which correspond to the position of the picture on the screen.

        Press 'space' to continue.
    KeyboardComponent ContinueSpace2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine LearningPhase
    TextComponent vocabPicAssoc
      color = black
      font = courier
      letterHeight = 0.1
      pos = (0, .5)
      startVal [time (s)] = 0.0
      text [set every repeat] = $TrainingFull
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    TextComponent TranslationTraining
      color = black
      font = courier
      letterHeight = 0.1
      pos = (0, -0.5)
      startVal [time (s)] = 0.0
      text [set every repeat] = $Translation
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    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0
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    ImageComponent image
      image [set every repeat] = $imagename
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    TextComponent pressSpace
      color = black
      font = courier
      letterHeight = 0.05
      pos = (0, -.75)
      startVal [time (s)] = 1.0
      text = Press 'Space' to continue.
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  Routine setUp
    CodeComponent code_4
      Code Type = Py
      Begin Experiment:
        group = expInfo["group"]

        # A dictionary, where the key is a block name,
        # and the value is the name of the spreadsheet
        # containing the trials for that block
        condFiles = {
            "A": "VocabTrainingA.xlsx",
            "B": "VocabTrainingB.xlsx",
            }

        # Key is group (a string "1", "2", etc.)
        # Value is a list containing the blocks in the desired
        #   order for the group.
        blockSequences = {
            "1": ["A", "B"], # Group 1 will see A first, then B.
            "2": ["B", "A"],
            }

        # Make sure "group" entered in the gui dialog is one that
        # we want
        assert group in blockSequences, "Invalid group entered"

        # Set the block sequence for this participant's group.
        blockSeq = blockSequences[group]
  Routine b'pickBlock_2'
    CodeComponent code_3
      Code Type = Py
      Begin Routine:
        # If we're on the 0th repetition (in our case meaning the 1st block),
        # get the 0th item in blockSeq list we made earlier.
        block = blockSeq[blocks.thisRepN]

        # Get the conditions file for that block
        condFile = condFiles[block]
  Routine PostTraining
    TextComponent text
      color = black
      font = courier
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Great! Are you ready to show what you've learned? On the next section, you'll need to identify the words, with at least an 85% accuracy rate.

        If you want to see these words again, click 'F'.

        If you're ready to move on, click 'J'.
    KeyboardComponent keyresponse4
      allowedKeys = 'f', 'j'
      correctAns = j
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    CodeComponent code
      Code Type = Py
      End Routine:
        if keyresponse4.corr:
            repeatTrainingloop.finished = True
  Routine SignOut
    TextComponent goodbye
      color = black
      font = courier
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Great! You've mastered these vocabulary items.

        Show the researcher this screen and they'll help you move on to the next part of the experiment.
    KeyboardComponent key_resp_2
      allowedKeys = 'g'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine trial
    TextComponent Question
      color = black
      font = courier
      letterHeight = 0.1
      pos = (0, .75)
      startVal [time (s)] = 0.0
      text = ¿Cuál imágen representa...
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    KeyboardComponent keyresponse
      allowedKeys = 'a', 'f', 'j', 'semicolon'
      correctAns = $CorrectAnswer
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    ImageComponent imageA
      image [set every repeat] = $ColumnA
      pos = (-0.75, 0)
      size = (0.45, 0.45)
      startVal [time (s)] = 0.0
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    ImageComponent imageF
      image [set every repeat] = $ColumnF
      pos = (-0.25, 0)
      size = (0.45, 0.45)
      startVal [time (s)] = 0.0
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    ImageComponent imageJ
      image [set every repeat] = $ColumnJ
      pos = (0.25, 0)
      size = (0.45, 0.45)
      startVal [time (s)] = 0.0
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    ImageComponent imageSemicolon
      image [set every repeat] = $ColumnSemicolon
      pos = (.75, 0)
      size = (0.45, 0.45)
      startVal [time (s)] = 0.0
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    TextComponent criticalText
      color = Black
      font = courier
      letterHeight = 0.1
      pos = (0, .5)
      startVal [time (s)] = 0.0
      text [set every repeat] = $MatchingSection
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    CodeComponent code_2
      Code Type = Py
      Begin Routine:
        ''' reset the counter at the beginning of each practice loop:'''
        if loop1.thisN == 0:
            number_correct = 0
      End Routine:
        if keyresponse.corr:
            number_correct = number_correct + 1

        ''' if this is the final repetition, check the proportion correct.'''
        if loop1.thisN +1 == loop1.nTotal:
            if number_correct/(loop1.nTotal) >= 0.85:
                ''' terminate the outer loop so no more practice happens:'''
                repeatloop.finished = True
  Routine Rest
    TextComponent restPhase
      color = black
      font = courier
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Great! You've learned (or reviewed) 20 new words!

        Take a short break if you need, because there are 20 more words to learn!

        Press 'space' when you're ready to continue.
    KeyboardComponent key_resp_5
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_6
      Code Type = Py
      Begin Routine:
        if blocks.thisN + 1 == blocks.nTotal:
            continueRoutine = False
  Routine pickBlocks2
    CodeComponent code_5
      Code Type = Py
      Begin Routine:
        # If we're on the 0th repetition (in our case meaning the 1st block),
        # get the 0th item in blockSeq list we made earlier.
        block = blockSeq[blocks.thisRepN]

        # Get the conditions file for that block
        condFile = condFiles[block]
  Routine Instructions
    TextComponent VocabTrainingInstructions
      color = Black
      font = Courier
      letterHeight = 0.075
      startVal [time (s)] = 0.0
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      text:
        You're going to learn (or review) some everyday Spanish vocabulary words. As you move through the vocab training, hit space bar to see the next word. After the each of the two rounds of training, you'll be quizzed before moving on to the next part of the study (minimum = 85% correct)

        Press 'space' to continue.
    KeyboardComponent ContinueSpace
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine setUp
  Routine Instructions
  LoopInitiator blocks loopType="TrialHandler"
    loopType = sequential
    nReps = $len(condFiles)
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    Routine pickBlocks2
    LoopInitiator repeatTrainingloop loopType="TrialHandler"
      loopType = random
      nReps = 999
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      LoopInitiator learningLoop loopType="TrialHandler"
        conditionsFile = $condFile
        loopType = fullRandom
        nReps = 1
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        Routine LearningPhase
      LoopTerminator learningLoop
      Routine PostTraining
    LoopTerminator repeatTrainingloop
    LoopInitiator repeatloop loopType="TrialHandler"
      loopType = random
      nReps = 999
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      Routine Instructions2
      LoopInitiator loop1 loopType="TrialHandler"
        conditionsFile = $condFile
        loopType = random
        nReps = 1
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        Routine trial
      LoopTerminator loop1
    LoopTerminator repeatloop
    Routine Rest
  LoopTerminator blocks
  Routine SignOut
